####################################################
# Geometry 
####################################################
# World:
s:Ge/World/Type = "TsBox"
s:Ge/World/Material = "Vacuum"
b:Ge/World/Invisible = "TRUE"

# TestBox:
s:Ge/myBox/Type = "TsBox"
s:Ge/myBox/Parent  = "World"
#s:Ge/myBox/Material = "G4_WATER"
b:Ge/myBox/IsParallel = "True"
d:Ge/myBox/HLX = 0.5 mm
d:Ge/myBox/HLY = 0.5 mm
d:Ge/myBox/HLZ = 0.5 mm
d:Ge/myBox/TransX = 0. m
d:Ge/myBox/TransY = 0. m
d:Ge/myBox/TransZ = 0 m
d:Ge/myBox/RotX = 0. deg
d:Ge/myBox/RotY = 0. deg
d:Ge/myBox/RotZ = 0. deg
i:Ge/myBox/XBins = 1
i:Ge/myBox/YBins = 1
i:Ge/myBox/ZBins = 10

# Geometry for vrt:
d:Ge/subComponent/Thickness     = 0.1 mm
d:Ge/subComponent/StartPosition = -1.0 * Ge/myBox/HLZ mm

s:Ge/subComponent1/Material  = "G4_WATER"
s:Ge/subComponent2/Material  = "G4_WATER"
s:Ge/subComponent3/Material  = "G4_WATER"
s:Ge/subComponent4/Material  = "G4_WATER"
s:Ge/subComponent5/Material  = "G4_WATER"
s:Ge/subComponent6/Material  = "G4_WATER"
s:Ge/subComponent7/Material  = "G4_WATER"
s:Ge/subComponent8/Material  = "G4_WATER"
s:Ge/subComponent9/Material  = "G4_WATER"
s:Ge/subComponent10/Material = "G4_WATER"

s:Ge/subComponent1/Type      = "TsBox"
s:Ge/subComponent1/Parent    = "World"
d:Ge/subComponent1/HLX       = Ge/myBox/HLX cm
d:Ge/subComponent1/HLY       = Ge/myBox/HLY cm
d:Ge/subComponent1/HLZ       = 0.5 * Ge/subComponent/Thickness cm
d:Ge/subComponent1/TransX    = 0 cm
d:Ge/subComponent1/TransY    = 0 cm
d:Ge/subComponent1/TransZ    = Ge/subComponent/StartPosition + Ge/subComponent1/HLZ cm
d:Ge/subComponent1/RotX      = 0 deg
d:Ge/subComponent1/RotY      = 0 deg
d:Ge/subComponent1/RotZ      = 0 deg

s:Ge/subComponent2/Type      = "TsBox"
s:Ge/subComponent2/Parent    = "World"
d:Ge/subComponent2/HLX       = Ge/myBox/HLX cm
d:Ge/subComponent2/HLY       = Ge/myBox/HLY cm
d:Ge/subComponent2/HLZ       = 0.5 * Ge/subComponent/Thickness cm
d:Ge/subComponent2/TransX    = 0 cm
d:Ge/subComponent2/TransY    = 0 cm
d:Ge/subComponent2/TransZTmp = Ge/subComponent1/TransZ + Ge/subComponent1/HLZ cm
d:Ge/subComponent2/TransZ    = Ge/subComponent2/TransZTmp + Ge/subComponent2/HLZ cm
d:Ge/subComponent2/RotX      = 0 deg
d:Ge/subComponent2/RotY      = 0 deg
d:Ge/subComponent2/RotZ      = 0 deg

s:Ge/subComponent3/Type      = "TsBox"
s:Ge/subComponent3/Parent    = "World"
d:Ge/subComponent3/HLX       = Ge/myBox/HLX cm
d:Ge/subComponent3/HLY       = Ge/myBox/HLY cm
d:Ge/subComponent3/HLZ       = 0.5 * Ge/subComponent/Thickness cm
d:Ge/subComponent3/TransX    = 0 cm
d:Ge/subComponent3/TransY    = 0 cm
d:Ge/subComponent3/TransZTmp = Ge/subComponent2/TransZ + Ge/subComponent2/HLZ cm
d:Ge/subComponent3/TransZ    = Ge/subComponent3/TransZTmp + Ge/subComponent3/HLZ cm
d:Ge/subComponent3/RotX      = 0 deg
d:Ge/subComponent3/RotY      = 0 deg
d:Ge/subComponent3/RotZ      = 0 deg

s:Ge/subComponent4/Type      = "TsBox"
s:Ge/subComponent4/Parent    = "World"
d:Ge/subComponent4/HLX       = Ge/myBox/HLX cm
d:Ge/subComponent4/HLY       = Ge/myBox/HLY cm
d:Ge/subComponent4/HLZ       = 0.5 * Ge/subComponent/Thickness cm
d:Ge/subComponent4/TransX    = 0 cm
d:Ge/subComponent4/TransY    = 0 cm
d:Ge/subComponent4/TransZTmp = Ge/subComponent3/TransZ + Ge/subComponent3/HLZ cm
d:Ge/subComponent4/TransZ    = Ge/subComponent4/TransZTmp + Ge/subComponent4/HLZ cm
d:Ge/subComponent4/RotX      = 0 deg
d:Ge/subComponent4/RotY      = 0 deg
d:Ge/subComponent4/RotZ      = 0 deg

s:Ge/subComponent5/Type      = "TsBox"
s:Ge/subComponent5/Parent    = "World"
d:Ge/subComponent5/HLX       = Ge/myBox/HLX cm
d:Ge/subComponent5/HLY       = Ge/myBox/HLY cm
d:Ge/subComponent5/HLZ       = 0.5 * Ge/subComponent/Thickness cm
d:Ge/subComponent5/TransX    = 0 cm
d:Ge/subComponent5/TransY    = 0 cm
d:Ge/subComponent5/TransZTmp = Ge/subComponent4/TransZ + Ge/subComponent4/HLZ cm
d:Ge/subComponent5/TransZ    = Ge/subComponent5/TransZTmp + Ge/subComponent5/HLZ cm
d:Ge/subComponent5/RotX      = 0 deg
d:Ge/subComponent5/RotY      = 0 deg
d:Ge/subComponent5/RotZ      = 0 deg

s:Ge/subComponent6/Type      = "TsBox"
s:Ge/subComponent6/Parent    = "World"
d:Ge/subComponent6/HLX       = Ge/myBox/HLX cm
d:Ge/subComponent6/HLY       = Ge/myBox/HLY cm
d:Ge/subComponent6/HLZ       = 0.5 * Ge/subComponent/Thickness cm
d:Ge/subComponent6/TransX    = 0 cm
d:Ge/subComponent6/TransY    = 0 cm
d:Ge/subComponent6/TransZTmp = Ge/subComponent5/TransZ + Ge/subComponent5/HLZ cm
d:Ge/subComponent6/TransZ    = Ge/subComponent6/TransZTmp + Ge/subComponent6/HLZ cm
d:Ge/subComponent6/RotX      = 0 deg
d:Ge/subComponent6/RotY      = 0 deg
d:Ge/subComponent6/RotZ      = 0 deg

s:Ge/subComponent7/Type      = "TsBox"
s:Ge/subComponent7/Parent    = "World"
d:Ge/subComponent7/HLX       = Ge/myBox/HLX cm
d:Ge/subComponent7/HLY       = Ge/myBox/HLY cm
d:Ge/subComponent7/HLZ       = 0.5 * Ge/subComponent/Thickness cm
d:Ge/subComponent7/TransX    = 0 cm
d:Ge/subComponent7/TransY    = 0 cm
d:Ge/subComponent7/TransZTmp = Ge/subComponent6/TransZ + Ge/subComponent6/HLZ cm
d:Ge/subComponent7/TransZ    = Ge/subComponent7/TransZTmp + Ge/subComponent7/HLZ cm
d:Ge/subComponent7/RotX      = 0 deg
d:Ge/subComponent7/RotY      = 0 deg
d:Ge/subComponent7/RotZ      = 0 deg

s:Ge/subComponent8/Type       = "TsBox"
s:Ge/subComponent8/Parent     = "World"
d:Ge/subComponent8/HLX        = Ge/myBox/HLX cm
d:Ge/subComponent8/HLY        = Ge/myBox/HLY cm
d:Ge/subComponent8/HLZ        = 0.5 * Ge/subComponent/Thickness cm
d:Ge/subComponent8/TransX     = 0 cm
d:Ge/subComponent8/TransY     = 0 cm
d:Ge/subComponent8/TransZTmp  = Ge/subComponent7/TransZ + Ge/subComponent7/HLZ cm
d:Ge/subComponent8/TransZ     = Ge/subComponent8/TransZTmp + Ge/subComponent8/HLZ cm
d:Ge/subComponent8/RotX       = 0 deg
d:Ge/subComponent8/RotY       = 0 deg
d:Ge/subComponent8/RotZ       = 0 deg

s:Ge/subComponent9/Type       = "TsBox"
s:Ge/subComponent9/Parent     = "World"
d:Ge/subComponent9/HLX        = Ge/myBox/HLX cm
d:Ge/subComponent9/HLY        = Ge/myBox/HLY cm
d:Ge/subComponent9/HLZ        = 0.5 * Ge/subComponent/Thickness cm
d:Ge/subComponent9/TransX     = 0 cm
d:Ge/subComponent9/TransY     = 0 cm
d:Ge/subComponent9/TransZTmp  = Ge/subComponent8/TransZ + Ge/subComponent8/HLZ cm
d:Ge/subComponent9/TransZ     = Ge/subComponent9/TransZTmp + Ge/subComponent9/HLZ cm
d:Ge/subComponent9/RotX       = 0 deg
d:Ge/subComponent9/RotY       = 0 deg
d:Ge/subComponent9/RotZ       = 0 deg

s:Ge/subComponent10/Type      = "TsBox"
s:Ge/subComponent10/Parent    = "World"
d:Ge/subComponent10/HLX       = Ge/myBox/HLX cm
d:Ge/subComponent10/HLY       = Ge/myBox/HLY cm
d:Ge/subComponent10/HLZ       = 0.5 * Ge/subComponent/Thickness cm
d:Ge/subComponent10/TransX    = 0 cm
d:Ge/subComponent10/TransY    = 0 cm
d:Ge/subComponent10/TransZTmp = Ge/subComponent9/TransZ + Ge/subComponent9/HLZ cm
d:Ge/subComponent10/TransZ    = Ge/subComponent10/TransZTmp + Ge/subComponent10/HLZ cm
d:Ge/subComponent10/RotX      = 0 deg
d:Ge/subComponent10/RotY      = 0 deg
d:Ge/subComponent10/RotZ      = 0 deg

# BeamPosition:
s:Ge/BeamPosition/Type = "Group"
s:Ge/BeamPosition/Parent  = "World"
d:Ge/BeamPosition/TransX = 0. m
d:Ge/BeamPosition/TransY = 0. m
d:Ge/BeamPosition/TransZ = 0.5 m


####################################################
# Scoring
####################################################
# PhaseSpace Sub1
s:Sc/MyScorer1/Quantity = "PhaseSpace"
b:Sc/MyScorer1/Visualize = "True"
s:Sc/MyScorer1/Surface = "subComponent1/ZMinusSurface"
s:Sc/MyScorer1/OutputType = "ASCII"
s:Sc/MyScorer1/OutputFile = "OutputPositionPicoBragg1"
s:Sc/MyScorer1/IfOutputFileAlreadyExists = "Increment"
b:Sc/MyScorer1/IncludeVertexInfo = "True"
sv:Sc/MyScorer1/OnlyIncludeParticlesNamed = 1 "Proton"

# PhaseSpace Sub2
s:Sc/MyScorer2/Quantity = "PhaseSpace"
b:Sc/MyScorer2/Visualize = "True"
s:Sc/MyScorer2/Surface = "subComponent2/ZMinusSurface"
s:Sc/MyScorer2/OutputType = "ASCII"
s:Sc/MyScorer2/OutputFile = "OutputPositionPicoBragg2"
s:Sc/MyScorer2/IfOutputFileAlreadyExists = "Increment"
b:Sc/MyScorer2/IncludeVertexInfo = "True"
sv:Sc/MyScorer2/OnlyIncludeParticlesNamed = 1 "Proton"

# PhaseSpace Sub3
s:Sc/MyScorer3/Quantity = "PhaseSpace"
b:Sc/MyScorer3/Visualize = "True"
s:Sc/MyScorer3/Surface = "subComponent3/ZMinusSurface"
s:Sc/MyScorer3/OutputType = "ASCII"
s:Sc/MyScorer3/OutputFile = "OutputPositionPicoBragg3"
s:Sc/MyScorer3/IfOutputFileAlreadyExists = "Increment"
b:Sc/MyScorer3/IncludeVertexInfo = "True"
sv:Sc/MyScorer3/OnlyIncludeParticlesNamed = 1 "Proton"

# PhaseSpace Sub4
s:Sc/MyScorer4/Quantity = "PhaseSpace"
b:Sc/MyScorer4/Visualize = "True"
s:Sc/MyScorer4/Surface = "subComponent4/ZMinusSurface"
s:Sc/MyScorer4/OutputType = "ASCII"
s:Sc/MyScorer4/OutputFile = "OutputPositionPicoBragg4"
s:Sc/MyScorer4/IfOutputFileAlreadyExists = "Increment"
b:Sc/MyScorer4/IncludeVertexInfo = "True"
sv:Sc/MyScorer4/OnlyIncludeParticlesNamed = 1 "Proton"

# PhaseSpace Sub5
s:Sc/MyScorer5/Quantity = "PhaseSpace"
b:Sc/MyScorer5/Visualize = "True"
s:Sc/MyScorer5/Surface = "subComponent5/ZMinusSurface"
s:Sc/MyScorer5/OutputType = "ASCII"
s:Sc/MyScorer5/OutputFile = "OutputPositionPicoBragg5"
s:Sc/MyScorer5/IfOutputFileAlreadyExists = "Increment"
b:Sc/MyScorer5/IncludeVertexInfo = "True"
sv:Sc/MyScorer5/OnlyIncludeParticlesNamed = 1 "Proton"

# PhaseSpace Sub6
s:Sc/MyScorer6/Quantity = "PhaseSpace"
b:Sc/MyScorer6/Visualize = "True"
s:Sc/MyScorer6/Surface = "subComponent6/ZMinusSurface"
s:Sc/MyScorer6/OutputType = "ASCII"
s:Sc/MyScorer6/OutputFile = "OutputPositionPicoBragg6"
s:Sc/MyScorer6/IfOutputFileAlreadyExists = "Increment"
b:Sc/MyScorer6/IncludeVertexInfo = "True"
sv:Sc/MyScorer6/OnlyIncludeParticlesNamed = 1 "Proton"

# PhaseSpace Sub7
s:Sc/MyScorer7/Quantity = "PhaseSpace"
b:Sc/MyScorer7/Visualize = "True"
s:Sc/MyScorer7/Surface = "subComponent7/ZMinusSurface"
s:Sc/MyScorer7/OutputType = "ASCII"
s:Sc/MyScorer7/OutputFile = "OutputPositionPicoBragg7"
s:Sc/MyScorer7/IfOutputFileAlreadyExists = "Increment"
b:Sc/MyScorer7/IncludeVertexInfo = "True"
sv:Sc/MyScorer7/OnlyIncludeParticlesNamed = 1 "Proton"

# PhaseSpace Sub8
s:Sc/MyScorer8/Quantity = "PhaseSpace"
b:Sc/MyScorer8/Visualize = "True"
s:Sc/MyScorer8/Surface = "subComponent8/ZMinusSurface"
s:Sc/MyScorer8/OutputType = "ASCII"
s:Sc/MyScorer8/OutputFile = "OutputPositionPicoBragg8"
s:Sc/MyScorer8/IfOutputFileAlreadyExists = "Increment"
b:Sc/MyScorer8/IncludeVertexInfo = "True"
sv:Sc/MyScorer8/OnlyIncludeParticlesNamed = 1 "Proton"

# PhaseSpace Sub9
s:Sc/MyScorer9/Quantity = "PhaseSpace"
b:Sc/MyScorer9/Visualize = "True"
s:Sc/MyScorer9/Surface = "subComponent9/ZMinusSurface"
s:Sc/MyScorer9/OutputType = "ASCII"
s:Sc/MyScorer9/OutputFile = "OutputPositionPicoBragg9"
s:Sc/MyScorer9/IfOutputFileAlreadyExists = "Increment"
b:Sc/MyScorer9/IncludeVertexInfo = "True"
sv:Sc/MyScorer9/OnlyIncludeParticlesNamed = 1 "Proton"

# PhaseSpace Sub10
s:Sc/MyScorer10/Quantity = "PhaseSpace"
b:Sc/MyScorer10/Visualize = "True"
s:Sc/MyScorer10/Surface = "subComponent10/ZMinusSurface"
s:Sc/MyScorer10/OutputType = "ASCII"
s:Sc/MyScorer10/OutputFile = "OutputPositionPicoBragg10"
s:Sc/MyScorer10/IfOutputFileAlreadyExists = "Increment"
b:Sc/MyScorer10/IncludeVertexInfo = "True"
sv:Sc/MyScorer10/OnlyIncludeParticlesNamed = 1 "Proton"


####################################################
# Beam Source
####################################################
s:So/MySource/Type = "Beam" 
s:So/MySource/Component = "BeamPosition"
s:So/MySource/BeamParticle = "proton"
s:So/MySource/BeamPositionDistribution = "None"
#s:So/MySource/BeamPositionCutoffShape = "Ellipse"
#d:So/MySource/BeamPositionCutoffX = 10. cm
#d:So/MySource/BeamPositionCutoffY = 10. cm
#d:So/MySource/BeamPositionSpreadX = 0.65 cm
#d:So/MySource/BeamPositionSpreadY = 0.65 cm
s:So/MySource/BeamAngularDistribution = "None" 
#d:So/MySource/BeamAngularCutoffX = 90. deg
#d:So/MySource/BeamAngularCutoffY = 90. deg
#d:So/MySource/BeamAngularSpreadX = 0.0032 rad
#d:So/MySource/BeamAngularSpreadY = 0.0032 rad
s:So/MySource/BeamEnergySpectrumType = "Discrete"
dv:So/MySource/BeamEnergySpectrumValues = 1 110.0 MeV
uv:So/MySource/BeamEnergySpectrumWeights = 1 1.0
i:So/MySource/NumberOfHistoriesInRun = 50
#i:So/MySource/NumberOfHistoriesInRandomJob = 0


####################################################
# Visualization
####################################################
s:Gr/MyOGL/Type = "OpenGL"
i:Gr/MyOGL/WidnowSizeX = 600
i:Gr/MyOGL/WindowSizeY = 600
d:Gr/MyOGL/Theta = 60 deg
d:Gr/MyOGL/Phi = 20 deg
#s:Gr/MyOGL/Projection = "Perspective"
#d:Gr/MyOGL/PerspectiveAngle = 60 deg
#b:Gr/MyOGL/IncludeAxes = "True"
b:Gr/Enable = "True"
i:Gr/Verbosity = 2
s:Gr/RefreshEvery = "Run"
b:Ts/ShowCPUTime = "True"
#b:Gr/MyOGL/CopyOpenGLToPDF = "TRUE"

sv:Ph/Default/Modules = 1 "g4em-standard_opt0"
#b:Ts/PauseBeforeQuit = "True"