####################################################
# Geometry 
####################################################
# World:
s:Ge/World/Type = "TsBox"
s:Ge/World/Material = "Vacuum"
b:Ge/World/Invisible = "TRUE"

# TestBox:
s:Ge/Patient/Type = "TsImageCube" 
s:Ge/Patient/Parent  = "World"
s:Ge/Patient/ImagingToMaterialConverter = "MaterialTagNumber"
iv:Ge/Patient/MaterialTagNumbers = 4 0 1 2 3
sv:Ge/Patient/MaterialNames = 4 "G4_LUNG_ICRP" "G4_WATER" "G4_BONE_CORTICAL_ICRP" "G4_TISSUE_SOFT_ICRP"
s:Ge/Patient/DataType  = "SHORT"
s:Ge/Patient/InputDirectory = "./"
s:Ge/Patient/InputFile = "materialGrid.dat"
b:Ge/Patient/OutputMaterialIndex = "True"

d:Ge/Patient/TransX = 0. mm
d:Ge/Patient/TransY = 0. mm
d:Ge/Patient/TransZ = 0. mm
d:Ge/Patient/RotX = 0. deg
d:Ge/Patient/RotY = 0. deg
d:Ge/Patient/RotZ = 0. deg
i:Ge/Patient/NumberOfVoxelsX = 1
i:Ge/Patient/NumberOfVoxelsY = 1
i:Ge/Patient/NumberOfVoxelsZ = 1
d:Ge/Patient/VoxelSizeX = 1. mm
d:Ge/Patient/VoxelSizeY = 1. mm
d:Ge/Patient/VoxelSizeZ = 5. mm

# b:Ph/CutSecondaries = "True"

# BeamPosition:
s:Ge/BeamPosition/Type = "Group"
s:Ge/BeamPosition/Parent  = "World"
d:Ge/BeamPosition/TransX = .0 mm
d:Ge/BeamPosition/TransY = .0 mm
d:Ge/BeamPosition/TransZ = 3. mm

####################################################
# Scoring
####################################################
s:Sc/PhaseSpacePatient/Quantity = "PhaseSpace"
b:Sc/PhaseSpacePatient/Visualize = "True"
s:Sc/PhaseSpacePatient/Surface = "Patient/ZMinusSurface"
s:Sc/PhaseSpacePatient/OutputType = "ASCII"
s:Sc/PhaseSpacePatient/OutputFile = "OutputVoxel"
s:Sc/PhaseSpacePatient/IfOutputFileAlreadyExists = "Overwrite"  # "Increment"
b:Sc/PhaseSpacePatient/IncludeVertexInfo = "True"
sv:Sc/PhaseSpacePatient/OnlyIncludeParticlesNamed = 1 "Proton"
s:Sc/PhaseSpacePatient/OnlyIncludeParticlesOfGeneration = "Primary"

s:Sc/EnergyAtPatient/Quantity = "EnergyDeposit"
s:Sc/EnergyAtPatient/Component = "Patient"
s:Sc/EnergyAtPatient/OutputFile = "EnergyAtPatientByBinsTOPAS"
s:Sc/EnergyAtPatient/IfOutputFileAlreadyExists = "Overwrite" # "Overwrite", "Exit" or "Increment"
#s:Sc/EnergyAtPatient/OnlyIncludeParticlesOfGeneration = "Primary"
#sv:Sc/EnergyAtPatient/OnlyIncludeParticlesNamed = 1 "proton"
# b:Sc/EnergyAtPatient/OutputToConsole = "True"

s:Sc/FluenceAtPatient/Quantity = "Fluence"
s:Sc/FluenceAtPatient/Component = "Patient"
s:Sc/FluenceAtPatient/OutputFile = "FluenceAtPatientByBinsTOPAS"
s:Sc/FluenceAtPatient/IfOutputFileAlreadyExists = "Overwrite"
sv:Sc/FluenceAtPatient/OnlyIncludeParticlesNamed = 1 "proton"
s:Sc/FluenceAtPatient/OnlyIncludeParticlesOfGeneration = "Primary"
#b:Sc/FluenceAtPatient/OutputToConsole = "True"

s:Sc/EnergyFluenceAtPatient/Quantity = "EnergyFluence"
s:Sc/EnergyFluenceAtPatient/Component = "Patient"
sv:Sc/EnergyFluenceAtPatient/OnlyIncludeParticlesNamed = 1 "proton"
s:Sc/EnergyFluenceAtPatient/OnlyIncludeParticlesOfGeneration = "Primary"
s:Sc/EnergyFluenceAtPatient/OutputFile = "EnergyFluenceAtPatientByBinsTOPAS"
s:Sc/EnergyFluenceAtPatient/OutputType = "csv"
s:Sc/EnergyFluenceAtPatient/IfOutputFileAlreadyExists = "Overwrite"
#b:Sc/EnergyFluenceAtPatient/OutputToConsole = "TRUE"
#b:Sc/EnergyFluenceAtPatient/Visualize = "TRUE"

####################################################
# Beam Source
####################################################
s:So/MySource/Type = "Beam" 
s:So/MySource/Component = "BeamPosition"
s:So/MySource/BeamParticle = "proton"
s:So/MySource/BeamPositionDistribution = "None" # None, Flat or Gaussian
#s:So/MySource/BeamPositionCutoffShape = "Rectangle"  # Rectangle or Ellipse (if Flat or Gaussian)
#d:So/MySource/BeamPositionCutoffX = 2.5 mm
#d:So/MySource/BeamPositionCutoffY = 2.5 mm
#d:So/MySource/BeamPositionSpreadX = 0.1667 mm
#d:So/MySource/BeamPositionSpreadY = 0.1667 mm
s:So/MySource/BeamAngularDistribution = "None" 
#d:So/MySource/BeamAngularCutoffX = 90. deg
#d:So/MySource/BeamAngularCutoffY = 90. deg
#d:So/MySource/BeamAngularSpreadX = 0.0032 rad
#d:So/MySource/BeamAngularSpreadY = 0.0032 rad
s:So/MySource/BeamEnergySpectrumType = "Discrete"
dv:So/MySource/BeamEnergySpectrumValues = 1 50 MeV
uv:So/MySource/BeamEnergySpectrumWeights = 1 1.0
i:So/MySource/NumberOfHistoriesInRun = 10
#i:So/MySource/NumberOfHistoriesInRandomJob = 0

####################################################
# Visualization
####################################################
s:Gr/MyOGL/Type = "OpenGL"
i:Gr/MyOGL/WidnowSizeX = 600
i:Gr/MyOGL/WindowSizeY = 600
d:Gr/MyOGL/Theta = 70 deg
d:Gr/MyOGL/Phi = 20 deg
#s:Gr/MyOGL/Projection = "Perspective"
#d:Gr/MyOGL/PerspectiveAngle = 60 deg
#b:Gr/MyOGL/IncludeAxes = "True"
#b:Gr/Enable = "True"
i:Gr/Verbosity = 0
i:Ts/NumberOfThreads = 0
i:Ts/ParameterizationErrorMaxReports = 1
s:Gr/RefreshEvery = "Run"
i:Ts/Seed = 7348907
b:Ts/ShowCPUTime = "True"
b:Ts/UseQt = "True"
b:Ts/PauseBeforeQuit = "True"
# b:Gr/MyOGL/CopyOpenGLToPDF = "TRUE"

sv:Ph/Default/Modules = 1 "g4em-standard_opt0"
# sv:Ph/Default/Modules = 3 "g4decay" "g4em-standard_opt3" "g4h-phy_QGSP_BIC"
# sv:Ph/Default/Modules = 3 "g4decay" "g4em-standard_opt4" "g4h-phy_QGSP_BIC"
#d:Ph/Default/CutForAllParticles = 1.0 mm
#d:Ph/Default/EMRangeMin = 50. eV
#d:Ph/Default/CutForGamma = 10. m
#d:Ph/Default/CutForElectron = 10. m
#d:Ph/Default/CutForPositron = 10. m
#d:Ph/Default/CutForProton = 10. m
#d:Ph/Default/CutForNeutron = 10. m
#b:Ph/ListProcesses = "True"
